/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals-DQLA.xml",
        "firewire-protocol": "broadcast-read-write" // for debugging
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30924"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "586288"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "438610"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM2"
        }
    ]
}
