/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "IOs":
    [
        {
            "name": "IO_1",
            "port": "fw"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "22723",
            "IO": "IO_1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "28247",
            "IO": "IO_1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "consoles":
    [
        {
            "name": "console",
            "input_type": "PEDALS_GOOVIS_HEAD_SENSOR",
            "IO_pedals" :
            {
                "IO": "IO_1",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json"
            }
            ,
            "HID_file": "hid/goovis-hd.json"
        }
    ]
}
