/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "32204",
            "base_frame": {
                "reference_frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "34863",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "teleop_PSMs":
    [
        {
            "MTM": "MTML",
            "PSM": "PSM2",
            "configure-parameter": {
                "jaw-rate": 6.28,
                "jaw-rate-back-from-clutch": 0.628,
                "start-orientation-tolerance": 0.087,
                "start-gripper-threshold": 0.087,
                "start-roll-threshold": 0.05
            }
        }
    ]
}
