/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "IOs":
    [
        {
            "name": "IO_1",
            "port": "fw"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "IO": "IO_1",
            "serial": "34863"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "IO": "IO_1",
            "serial": "32336"
        }
    ]
    ,
    "consoles": [
        {
            "name": "console1",
            "input_type": "PEDALS_ONLY",
            "IO_pedals":
            {
                "IO": "IO_1",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json"
            }
        }
    ]
}
