/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "IOs":
    [
        {
            "name": "IO_1",
            "port": "fw",
            "protocol": "broadcast-query-read-write"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "IO": "IO_1",
            "IO_file": "sawRobotIO1394-SUJ.xml",
            "arm_file": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "IO": "IO_1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "32204",
            "IO": "IO_1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738",
            "IO": "IO_1",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
    ,
    "consoles":
    [
        {
            "name": "console",
            "input_type": "PEDALS_ISI_HEAD_SENSOR",
            "IO_pedals" :
            {
                "IO": "IO_1",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-QLA1.json"
            }
            ,
            "IO_head_sensor":
            {
                "IO": "IO_1",
                "IO_file": "io/sawRobotIO1394-MTMR-dv-head-sensor-QLA1.json"
            }
        }
    ]
}
